PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SAT
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Routines
  Routine inter_stim_time
    TextComponent inter_stim_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_time
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  Routine inter_stim_code
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        import numpy as np
        # generate random num 1-3
        stim_time = np.random.randint(1, 4)
        signal_time_list = [0.017, 0.029, 0.050]  # sec
        signal_choice = np.random.randint(0, 3)
        signal = signal_time_list[signal_choice]
  Routine delay
    TextComponent delay_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine signal_event
Flow
  Routine inter_stim_code
  Routine inter_stim_time
  Routine signal_event
  Routine delay
