PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = video_narrative
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Routines
  Routine pieman_audio
    CodeComponent pieman_code
      Code Type = Py
      Begin Routine:
        marker.send_marker("trial_start")
        marker.send_marker("stimuli_start")
      End Routine:
        marker.send_marker("stimuli_end")
    SoundComponent pieman_clip
      sound = audio_clips\pieman_original.wav
      startVal [time (s)] = 0.0
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    PolygonComponent pieman_cross
      fillColor = white
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 240
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  Routine unrehearsed_audio
    CodeComponent unrehearsed_code
      Code Type = Py
      Begin Routine:
        marker.send_marker("trial_start")
        marker.send_marker("stimuli_start")
      End Routine:
        marker.send_marker("stimuli_end")
    SoundComponent unrehearsed_clip
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent unrehearsed_cross
      fillColor = white
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine pieman_instructions
    TextComponent instructions1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the "Pie-man" audio clip.

        Please pay attention to the story.

        Press SPACE when you are ready to listen the clip.
    KeyboardComponent instructions1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine unrehearsed_instructions
    TextComponent instructions2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the "Unreheared real-life story" audio clip.

        Please pay attention to the story.

        Press SPACE when you are ready to listen to the clip.
    KeyboardComponent instructions2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pieman_recall_details
    TextComponent pieman_details_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please recall details from the "Pie-man" clip. You will have ??? minutes to type your response.

        Press SPACE when you are ready to continue.
    KeyboardComponent pieman_details_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent pieman_marker_code
      Code Type = Py
      End Routine:
        marker.send_marker("trial_end")
  Routine unrehearsed_recall_details
    CodeComponent unrehearsed_marker_code
      Code Type = Py
      End Routine:
        marker.send_marker("trial_end")
    TextComponent unrehearsed_details_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please recall details from the "Unrehearsed real-life story" clip.

        Press SPACE when you are ready to continue.
    KeyboardComponent unrehearsed_details_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Begin Experiment:
        import os
        # path to kernel socket module
        cwd = os.getcwd()
        os.chdir("..")
        kernel_socket_path = os.path.join(os.getcwd(), "main", "kernel_socket")
        os.chdir(cwd)
        import sys
        sys.path.insert(0, kernel_socket_path)
        from kernel_socket import Marker
        marker = Marker()

        marker.send_marker("experiment_start")
  Routine end_experiment_code
    CodeComponent end_exp_code
      Code Type = Py
      Begin Routine:
        marker.send_marker("experiment_end")
  Routine text_input_response
    TextboxComponent participant_response
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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Flow
  Routine initial_exp_code
  Routine pieman_instructions
  Routine pieman_audio
  Routine pieman_recall_details
  Routine text_input_response
  Routine end_experiment_code
