PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-0.7000, -0.7000, -0.7000]
  expName = practice_go_no_go
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Routines
  Routine inter_stim_interval
    PolygonComponent inter_stim_plus
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $inter_stim_interval
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  Routine GNG_loop_code
    CodeComponent dataset_code
      Code Type = Py
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      Begin Routine:
        this_loop_conditions = os.path.join(practice_conds_path, task_order)

        if "go" in task_order:
            text_display = [1, 0]
        elif "GNG" in task_order:
            text_display = [0, 1]
  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Before Experiment:
        import os
        cwd = os.getcwd()
        practice_conds_path = os.path.join(cwd, "practice_go_no_go_conditions")
        practice_conds_list = os.listdir(practice_conds_path)
      Begin Experiment:
        win.mouseVisible = False
  Routine initial_instructions
    TextComponent initial_instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the Go/No-Go task.

        You are going to see either a puppy or a spider image briefly appear on the screen. Press SPACE as fast as you can when you see a puppy. Do not press anything when you see a spider.

        When the image disappears, a plus sign will appear on the screen. Look at the plus sign until the next image appears.

        Press SPACE to continue.
    KeyboardComponent initial_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine practice_instructions
    TextComponent practice_instructions_text
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is a practice trial.

        Remember:
        Press RIGHT ARROW as soon as a PUPPY appears.
        Press LEFT ARROW as soon a SPIDER appears.

        Press SPACE to begin the practice trial.
    KeyboardComponent practice_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine practice_trial
    TextComponent practice_text
      letterHeight = 0.1
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Press key now!
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    PolygonComponent practice_plus
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent practice_image
      image [set every repeat] = $GNG_stim
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine practice_interval
    PolygonComponent practice_interval_plus
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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  Routine finish_practice
    TextComponent finish_practice_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press SPACE to complete practice and begin the trial.

        Press BACKSPACE for more practice.
    KeyboardComponent finish_practice_resp
      allowedKeys = 'space', 'backspace'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine practice_start_code
    CodeComponent prac_start_code
      Code Type = Py
      Begin Routine:
        marker.send_marker("practice_start")
  Routine post_stim_code
    CodeComponent marker_end_code
      Code Type = Py
      disabled = True
      Begin Routine:
        marker.send_marker("stimuli_end")
        marker.send_marker("trial_end")
  Routine block_start_code
    CodeComponent block_marker_code
      Code Type = Py
  Routine block_end_code
    CodeComponent block_end_marker
      Code Type = Py
  Routine inter_stim_match_code
    CodeComponent inter_stim_code
      Code Type = Py
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      Begin Routine:
        if match == 1:
            corr_key = "space"
        elif match == 0:
            corr_key = None
  Routine experiment_end_code
    CodeComponent exp_end_marker
      Code Type = Py
  Routine practice_end_code
    CodeComponent prac_end_code
      Code Type = Py
      Begin Routine:
        if finish_practice_resp.keys == "space":
            marker.send_marker("practice_end")
            break
        elif finish_practice_resp.keys == "backspace":
            pass
  Routine GNG_instructions
    TextComponent go_instructions_text
      letterHeight = 0.05
      opacity [set every repeat] = text_display[0]
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the GO experiment.

        Remember, press SPACE only when a puppy image appears.

        Press SPACE to begin.
    TextComponent no_go_instructions_text
      letterHeight = 0.05
      opacity [set every repeat] = text_display[1]
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the GO/NO-GO experiment.

        Remember, press SPACE only when a puppy image appears.

        Press SPACE to begin.
    KeyboardComponent GNG_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
      syncScreenRefresh = False
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  Routine GNG_trial
    KeyboardComponent go_resp
      allowedKeys = 'space'
      correctAns = $corr_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      storeCorrect = True
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    PolygonComponent go_plus
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent go_image
      image [set every repeat] = $GNG_stim
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine initial_exp_code
  Routine initial_instructions
  LoopInitiator GNG_loop loopType="TrialHandler"
    conditionsFile = practice_GNG_TO.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('task_order', 'practice_go_stims.csv')]),
      OrderedDict([('task_order', 'practice_GNG_stims.csv')])]
    Routine GNG_loop_code
    Routine GNG_instructions
    LoopInitiator GNG_block loopType="TrialHandler"
      conditionsFile = $this_loop_conditions
      loopType = sequential
      nReps = 1
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      Routine inter_stim_interval
      Routine GNG_trial
    LoopTerminator GNG_block
  LoopTerminator GNG_loop
