PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-0.7000, -0.7000, -0.7000]
  expName = king_devick
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Routines
  Routine instructions
    TextComponent instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the King Devick task.

        You will be presented with one practice card and then three task cards.

        Press SPACE to continue.
    KeyboardComponent instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine demo_card_instructions
    TextComponent demo_instructions_text
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the practice card.

        Read the lines of numbers from left to right as quickly as you can without making mistakes. If you do make a mistake, please continue reading the numbers.

        Press SPACE to begin. Press SPACE again as soon as you finish reading all numbers.
    KeyboardComponent demo_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine test1_card_instructions
    TextComponent test1_instructions_text
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the first task card.

        Read the lines of numbers from left to right as quickly as you can without making mistakes. If you do make a mistake, please continue reading the numbers.

        Press SPACE to begin. Press SPACE again as soon as you finish reading all numbers.
    KeyboardComponent test1_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
      syncScreenRefresh = False
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  Routine test2_card_instructions
    TextComponent test2_instructions_text
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the second task card.

        Read the lines of numbers from left to right as quickly as you can without making mistakes. If you do make a mistake, please continue reading the numbers.

        Press SPACE to begin. Press SPACE again as soon as you finish reading all numbers.
    KeyboardComponent test2_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
      syncScreenRefresh = False
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  Routine test3_card_instructions
    TextComponent test3_instructions_text
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the third task card.

        Read the lines of numbers from left to right as quickly as you can without making mistakes. If you do make a mistake, please continue reading the numbers.

        Press SPACE to begin. Press SPACE again as soon as you finish reading all numbers.
    KeyboardComponent test3_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
      syncScreenRefresh = False
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  Routine demo_card_instructions_2
    TextComponent demo_instructions_text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        This is the demonstration card.

        Press SPACE to continue.
    KeyboardComponent demo_instructions_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine demo_card
    ImageComponent demo_image
      image = king_devick_stimuli\demo_card.jpg
      saveStartStop = False
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
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    KeyboardComponent demo_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine test1_card
    ImageComponent test1_image
      image = king_devick_stimuli\test1_card.jpg
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
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    KeyboardComponent test1_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test2_card
    ImageComponent test2_image
      image = king_devick_stimuli\test2_card.jpg
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
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    KeyboardComponent test2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test3_card
    ImageComponent test3_image
      image = king_devick_stimuli\test3_card.jpg
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
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    KeyboardComponent test3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Before Experiment:
        from datetime import datetime
        import time
        import os
        import sys

        initial_timestamp = time.time()
        clock_time_offset = logging.defaultClock.getTime()
        task_start_timestamp = initial_timestamp - clock_time_offset  # account for timestamp delay from clock creation

        task_start_timestamp_fmt = int(task_start_timestamp * 1e9)
        start_time = datetime.fromtimestamp(task_start_timestamp).strftime("%Y-%m-%d-%H-%M-%S-%f")
      Begin Experiment:
        win.mouseVisible = False

        # setup dirs and files -----
        tasks_dir = os.path.dirname(_thisDir)
        task_dir = os.path.join(tasks_dir, expName)
        par_dir = os.path.join(tasks_dir, "participants", f"participant_{expInfo['participant']}")
        par_task_dir = os.path.join(par_dir, f"{str(expName)}")
        data_dir = os.path.join(par_task_dir, "data")

        try:
            os.mkdir(data_dir)
        except:
            pass

        filename = os.path.join(data_dir, f"{str(expInfo['participant'])}_{str(expInfo['session'])}_{str(expName)}_{start_time}")
        thisExp.dataFileName = filename
        logFile = logging.LogFile(filename +'.log', level=logging.EXP)

        # setup markers -----
        cwd = os.getcwd()
        kernel_socket_path = os.path.join(os.path.dirname(cwd), "main", "kernel_socket")
        sys.path.insert(0, kernel_socket_path)
        from kernel_socket import Marker
        marker = Marker(par_dir)

        # start experiment marker -----
        marker.send_marker(31, task_start_timestamp_fmt)
      End Experiment:
        # end experiment marker -----
        task_end_timestamp = time.time() - clock_time_offset
        task_end_timestamp_fmt = int(task_end_timestamp * 1e9)
        marker.send_marker(32, task_end_timestamp_fmt)
  Routine post_demo_code
    CodeComponent post_code
      Code Type = Py
  Routine post_stimuli_code
    CodeComponent post_stim_code
      Code Type = Py
  Routine experiment_end_code
    CodeComponent end_code
      Code Type = Py
Flow
  Routine initial_exp_code
  Routine instructions
  Routine demo_card_instructions
  Routine demo_card
  Routine test1_card_instructions
  Routine test1_card
  Routine test2_card_instructions
  Routine test2_card
  Routine test3_card_instructions
  Routine test3_card
