PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = n_back
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Routines
  Routine instructions
    TextComponent instructions_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        These are the instructions for the N-back experiment.

        Press SPACE to continue.
    KeyboardComponent instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine rest_20
    TextComponent rest_20_text
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
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  Routine one_back_prompt
    TextComponent one_back_prompt_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        1-back trial.

        Press SPACE if the current number matches the previous number.
  Routine trial_one_back
    TextComponent one_back_num_stim
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $num_stim
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    KeyboardComponent one_back_resp
      allowedKeys = 'space'
      correctAns = $match
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      storeCorrect = True
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  Routine two_back_prompt
    TextComponent two_back_prompt_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        2-back trial.

        Press SPACE if the current number matches the number two back.
  Routine trial_two_back
    TextComponent two_back_num_stim
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $num_stim
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    KeyboardComponent two_back_resp
      allowedKeys = 'space'
      correctAns = $match
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      storeCorrect = True
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  Routine main_loop_code
    CodeComponent outer_loop_code
      Code Type = Py
      Begin Routine:
        if task_order == "zero_back1":
            this_loop_conditions = zero_back_csv_list[0]
            match_num = this_loop_conditions.split("-")[1].split("_")[1]
            text_display = [1, 0, 0]
        elif task_order == "zero_back2":
            this_loop_conditions = zero_back_csv_list[1]
            match_num = this_loop_conditions.split("-")[1].split("_")[1]
            text_display = [1, 0, 0]
        elif task_order == "zero_back3":
            this_loop_conditions = zero_back_csv_list[2]
            match_num = this_loop_conditions.split("-")[1].split("_")[1]
            text_display = [1, 0, 0]
        elif task_order == "one_back1":
            this_loop_conditions = one_back_csv_list[0]
            text_display = [0, 1, 0]
        elif task_order == "one_back2":
            this_loop_conditions = one_back_csv_list[1]
            text_display = [0, 1, 0]
        elif task_order == "one_back3":
            this_loop_conditions = one_back_csv_list[2]
            text_display = [0, 1, 0]
        elif task_order == "two_back1":
            this_loop_conditions = two_back_csv_list[0]
            text_display = [0, 0, 1]
        elif task_order == "two_back2":
            this_loop_conditions = two_back_csv_list[1]
            text_display = [0, 0, 1]
        elif task_order == "two_back3":
            this_loop_conditions = two_back_csv_list[2]
            text_display = [0, 0, 1]
  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Before Experiment:
        import os
        # path to kernel socket module
        cwd = os.getcwd()
        os.chdir("..")
        kernel_socket_path = os.path.join(os.getcwd(), "main", "kernel_socket")
        os.chdir(cwd)
        import sys
        sys.path.insert(0, kernel_socket_path)
        from kernel_socket import Marker
        marker = Marker()

        for filename in os.listdir(cwd):
            if "n_back_task_order-" in filename:
                task_order_csv = filename

        conditions_dir = os.path.join(cwd, "n_back_conditions")

        zero_back_csv_list = []
        zero_back_match_list = []
        one_back_csv_list = []
        two_back_csv_list = []

        # create file names and paths for each condition
        for csv_filename in os.listdir(conditions_dir):
            if "zero" in csv_filename:
                zero_back_csv_list.append(os.path.join("n_back_conditions", csv_filename))
                # get stimulus condition for 0-back
                split_csv = csv_filename.split("-")
                match = split_csv[1].split("_")[1]
                zero_back_match_list.append(match)
            elif "one" in csv_filename:
                one_back_csv_list.append(os.path.join("n_back_conditions", csv_filename))
            elif "two" in csv_filename:
                two_back_csv_list.append(os.path.join("n_back_conditions", csv_filename))

        marker.send_marker(51)
      End Experiment:
        marker.send_marker(52)
  Routine stim
    CodeComponent stim_code
      Code Type = Py
    TextComponent stim_text
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $num_stim
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    KeyboardComponent stim_resp
      allowedKeys = 'right', 'left'
      correctAns = $corr_key
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      storeCorrect = True
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    PolygonComponent stim_cross
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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  Routine trial_instructions
    TextComponent exp_zero_back_text
      letterHeight = 0.05
      opacity [set every repeat] = text_display[0]
      startVal [time (s)] = 0.0
      text [set every repeat] = $"This is a 0-back trial. \n\nPress RIGHT if the number is: " + str(match_num) + ".\nOtherwise, press LEFT. \n\nPress SPACE when you are ready to begin."
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    TextComponent exp_one_back_text
      letterHeight = 0.05
      opacity [set every repeat] = text_display[1]
      startVal [time (s)] = 0.0
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      text:
        This is a 1-Back trial.

        Press RIGHT if the current number matches the previous number. Otherwise, press LEFT.

        Press SPACE when you are ready to begin.
    TextComponent exp_two_back_text
      letterHeight = 0.05
      opacity [set every repeat] = text_display[2]
      startVal [time (s)] = 0.0
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      text:
        This is a 2-back trial.

        Press RIGHT if the current number matches the number two back. Otherwise, press LEFT.

        Press SPACE when you are ready to begin.
    KeyboardComponent trial_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
      syncScreenRefresh = False
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  Routine practice_instructions
    CodeComponent practice_marker_start
      Code Type = Py
      End Routine:
        marker.send_marker("practice_start")
    TextComponent practice_instructions_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Practice instructions go here.
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    KeyboardComponent practice_instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine finish_practice_code
    CodeComponent finish_prac_code
      Code Type = Py
      Begin Routine:
        marker.send_marker("practice_end")
  Routine block_start_code
    CodeComponent block_marker_code
      Code Type = Py
  Routine block_end_code
    CodeComponent block_end_marker
      Code Type = Py
  Routine experiment_end_code
    CodeComponent exp_end_code
      Code Type = Py
  Routine match_code
    CodeComponent stim_match_code
      Code Type = Py
      disabled = True
      Begin Routine:
        if match == 1:
            corr_key = "space"
        elif match == 0:
            corr_key = None
  Routine instructions_pause
    PolygonComponent pause_cross
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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Flow
  Routine initial_exp_code
  Routine instructions
  LoopInitiator n_back_loop loopType="TrialHandler"
    conditionsFile = $task_order_csv
    loopType = sequential
    nReps = 1
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    Routine main_loop_code
    Routine trial_instructions
    Routine instructions_pause
    Routine block_start_code
    LoopInitiator stim_loop loopType="TrialHandler"
      conditionsFile = $this_loop_conditions
      loopType = sequential
      nReps = 1
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      Routine stim
    LoopTerminator stim_loop
    Routine block_end_code
  LoopTerminator n_back_loop
  Routine experiment_end_code
