PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-0.7000, -0.7000, -0.7000]
  expName = practice_n_back
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Routines
  Routine instructions
    TextComponent instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the N-Back task.

        You will be presented a sequence of numbers one-by-one. For each number, you need to decide if the current number is the same as the number presented N trials ago.

        There will be three different tasks: a 0-back, and 1-back, and a 2-back.

        Press SPACE to continue.
    KeyboardComponent instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine rest_20
    TextComponent rest_20_text
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 20
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  Routine one_back_prompt
    TextComponent one_back_prompt_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        1-back trial.

        Press SPACE if the current number matches the previous number.
  Routine trial_one_back
    TextComponent one_back_num_stim
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $num_stim
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    KeyboardComponent one_back_resp
      allowedKeys = 'space'
      correctAns = $match
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      storeCorrect = True
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  Routine two_back_prompt
    TextComponent two_back_prompt_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        2-back trial.

        Press SPACE if the current number matches the number two back.
  Routine trial_two_back
    TextComponent two_back_num_stim
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $num_stim
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    KeyboardComponent two_back_resp
      allowedKeys = 'space'
      correctAns = $match
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      storeCorrect = True
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  Routine main_loop_code
    CodeComponent outer_loop_code
      Code Type = Py
      Begin Routine:
        this_loop_conditions = os.path.join(practice_conds_path, task_order)

        if "ZB" in this_loop_conditions:
            match_num = task_order.split("-")[1].split("_")[1]
            text_display = [1, 0, 0]
        elif "OB" in task_order:
            match_num = ""
            text_display = [0, 1, 0]
        elif "TB" in task_order:
            match_num = ""
            text_display = [0, 0, 1]
  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Before Experiment:
        import os
        cwd = os.getcwd()
        practice_conds_path = os.path.join(cwd, "practice_n_back_conditions")
        practice_conds_list = os.listdir(practice_conds_path)
      Begin Experiment:
        win.mouseVisible = False
  Routine stim
    TextComponent stim_text
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $num_stim
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    KeyboardComponent stim_resp
      allowedKeys = 'right', 'left'
      correctAns = $corr_key
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      storeCorrect = True
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    PolygonComponent stim_cross
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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  Routine trial_instructions
    TextComponent exp_zero_back_text
      letterHeight = 0.05
      opacity [set every repeat] = text_display[0]
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        This is a 0-back trial.

        Press RIGHT if the number is 3.
        Otherwise, press LEFT.

        Press SPACE to begin.
    TextComponent exp_one_back_text
      letterHeight = 0.05
      opacity [set every repeat] = text_display[1]
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is a 1-Back trial.

        Press RIGHT if the current number matches the previous number. Otherwise, press LEFT.

        Press SPACE to begin.
    TextComponent exp_two_back_text
      letterHeight = 0.05
      opacity [set every repeat] = text_display[2]
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is a 2-back trial.

        Press RIGHT if the current number matches the number two back. Otherwise, press LEFT.

        Press SPACE to begin.
    KeyboardComponent trial_instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
      syncScreenRefresh = False
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  Routine practice_instructions
    CodeComponent practice_marker_start
      Code Type = Py
      End Routine:
        marker.send_marker("practice_start")
    TextComponent practice_instructions_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Practice instructions go here.
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    KeyboardComponent practice_instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine finish_practice_code
    CodeComponent finish_prac_code
      Code Type = Py
      Begin Routine:
        marker.send_marker("practice_end")
  Routine block_start_code
    CodeComponent block_marker_code
      Code Type = Py
  Routine block_end_code
    CodeComponent block_end_marker
      Code Type = Py
  Routine experiment_end_code
    CodeComponent exp_end_code
      Code Type = Py
  Routine match_code
    CodeComponent stim_match_code
      Code Type = Py
      disabled = True
      Begin Routine:
        if match == 1:
            corr_key = "space"
        elif match == 0:
            corr_key = None
  Routine instructions_pause
    PolygonComponent pause_cross
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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Flow
  Routine initial_exp_code
  Routine instructions
  LoopInitiator n_back_loop loopType="TrialHandler"
    conditionsFile = practice_NB_TO.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('task_order', 'practice_ZB-match_3.csv')]),
      OrderedDict([('task_order', 'practice_OB.csv')]),
      OrderedDict([('task_order', 'practice_TB.csv')])]
    Routine main_loop_code
    Routine trial_instructions
    Routine instructions_pause
    LoopInitiator stim_loop loopType="TrialHandler"
      conditionsFile = $this_loop_conditions
      loopType = sequential
      nReps = 1
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      Routine stim
    LoopTerminator stim_loop
  LoopTerminator n_back_loop
