PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-0.7000, -0.7000, -0.7000]
  expName = resting_state
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Routines
  Routine welcome
    TextComponent welcome_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $"This is the 7-minute resting state task\n\nPlease sit still with your " + str(resting_state_order[0]) + ".\n\n" + "Halfway through the task, you will hear a tone. After the tone, please sit still with your " + str(resting_state_order[1]) + " for the remainder of the task. You will hear a second tone when the task is complete.\n\nPress SPACE when you are ready to begin."
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    KeyboardComponent welcome_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine trial
    SoundComponent halfway_tone
      sound = A
      startVal [time (s)] = 210
      stopVal [duration (s)] = 0.5
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    PolygonComponent trial_cross
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 420
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  Routine done
    SoundComponent done_sound
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent done_text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = The Resting State task is now complete.
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  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Before Experiment:
        from datetime import datetime
        import time
        import os
        import sys
        import csv

        initial_timestamp = time.time()
        clock_time_offset = logging.defaultClock.getTime()
        task_start_timestamp = initial_timestamp - clock_time_offset  # account for timestamp delay from clock creation

        task_start_timestamp_fmt = int(task_start_timestamp * 1e9)
        start_time = datetime.fromtimestamp(task_start_timestamp).strftime("%Y-%m-%d-%H-%M-%S-%f")
      Begin Experiment:
        win.mouseVisible = False

        # setup dirs and files -----
        tasks_dir = os.path.dirname(_thisDir)
        task_dir = os.path.join(tasks_dir, expName)
        par_dir = os.path.join(tasks_dir, "participants", f"participant_{expInfo['participant']}")
        par_task_dir = os.path.join(par_dir, f"{str(expName)}")
        data_dir = os.path.join(par_task_dir, "data")

        try:
            os.mkdir(data_dir)
        except:
            pass

        filename = os.path.join(data_dir, f"{str(expInfo['participant'])}_{str(expInfo['session'])}_{str(expName)}_{start_time}")
        thisExp.dataFileName = filename
        logFile = logging.LogFile(filename +'.log', level=logging.EXP)

        # setup markers -----
        cwd = os.getcwd()
        kernel_socket_path = os.path.join(os.path.dirname(cwd), "main", "kernel_socket")
        sys.path.insert(0, kernel_socket_path)
        from kernel_socket import Marker
        marker = Marker(par_dir)

        # task order -----
        for task_filename in os.listdir(par_task_dir):
            if "RS_TO-" in task_filename:
                task_order_csv = os.path.join(par_task_dir, task_filename)

        # read task order file -----
        file = open(task_order_csv)
        csvreader = csv.reader(file)

        rows = []
        for row in csvreader:
                rows.append(row[0])
        file.close()

        resting_state_1 = rows[1]
        resting_state_2 = rows[2]
        resting_state_order = [resting_state_1, resting_state_2]

        # start experiment marker -----
        marker.send_marker(51, task_start_timestamp_fmt)
      End Experiment:
        # end experiment marker -----
        task_end_timestamp = time.time() - clock_time_offset
        task_end_timestamp_fmt = int(task_end_timestamp * 1e9)
        marker.send_marker(52, task_end_timestamp_fmt)
  Routine experiment_end_code
    CodeComponent end_code
      Code Type = Py
Flow
  Routine initial_exp_code
  Routine welcome
  Routine trial
  Routine done
