PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = affective_go_no_go
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Routines
  Routine inter_stim_interval
    TextComponent inter_stim_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_time
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  Routine inter_stim_time_code
    CodeComponent inter_stim_code
      Code Type = Py
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      Begin Routine:
        import random
        stim_time = random.randint(4, 7)
  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Begin Experiment:
        import os
        cwd = os.getcwd()
        loop_num = -1  # increased by 1 each loop

        TOL_conditions_dir = os.path.join(cwd, "TOL_conditions")

        ZM_csv_list = []
        MM_csv_list = []

        for csv_filename in os.listdir(TOL_conditions_dir):
            if "ZM" in csv_filename:
                ZM_csv_list.append(os.path.join("TOL_conditions", csv_filename))
            elif "MM" in csv_filename:
                MM_csv_list.append(os.path.join("TOL_conditions", csv_filename))

        for filename in os.listdir(cwd):
            if "TOL_task_order-" in filename:
                TOL_task_order = filename
  Routine GNG_instructions
    TextComponent GNG_instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the Go/No-Go experiment.

        Puppies = Go
        Spiders = No-Go

        Press SPACE when a Go stimulus appears.
        Do not press anything when a No-Go stimulus appears.

        Press SPACE when you are ready to continue.
    KeyboardComponent GNG_instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine go_trial
    TextComponent go_trial_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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    KeyboardComponent go_resp
      allowedKeys = 'space'
      correctAns = $match
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
      storeCorrect = True
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    ImageComponent go_image
      image [set every repeat] = $go_stim
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine TOL_loop_code
    CodeComponent outer_loop_code
      Code Type = Py
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      Begin Routine:
        if task_order == "ZM1":
            this_loop_conditions = ZM_csv_list[0]
            text_display = [1, 0]
            num_moves = "zero"
        elif task_order == "ZM2":
            this_loop_conditions = ZM_csv_list[1]
            text_display = [1, 0]
            num_moves = "zero"
        elif task_order == "ZM3":
            this_loop_conditions = ZM_csv_list[2]
            text_display = [1, 0]
            num_moves = "zero"
        elif task_order == "MM":
            this_loop_conditions = MM_csv_list[0]
            text_display = [0, 1]
            num_moves = "two"
        elif task_order == "MM2":
            this_loop_conditions = MM_csv_list[1]
            text_display = [0, 1]
            num_moves = "two"
        elif task_order == "MM3":
            this_loop_conditions = MM_csv_list[2]
            num_moves = "two"
            text_display = [0, 1]
  Routine instructions
    TextComponent instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        These are the instructions for the Tower of London experiment.

        Press SPACE to continue.
    KeyboardComponent instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_instructions
    TextComponent zero_move_text
      letterHeight = 0.1
      opacity [set every repeat] = text_display[0]
      startVal [time (s)] = 0.0
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      text:
        If the Tower of London image can be solved in zero moves, press SPACE.

        Press SPACE to continue.
    TextComponent multi_move_text
      letterHeight = 0.1
      opacity [set every repeat] = text_display[1]
      startVal [time (s)] = 0.0
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      text:
        If the Tower of London image can be solved in exactly two moves, press SPACE.

        Press SPACE to continue.
    KeyboardComponent exp_instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stim
    TextComponent TOL_trial_text
      letterHeight = 0.1
      startVal [time (s)] = 7
      stopVal [duration (s)] = 3
      text [set every repeat] = $f"Can you solve this in exactly {num_moves} moves? \n\nPress Y for YES \nPress N for NO"
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    KeyboardComponent TOL_trial_resp
      allowedKeys = 'space'
      correctAns = $match
      forceEndRoutine = True
      startVal [time (s)] = 7
      stopVal [duration (s)] = 3
      storeCorrect = True
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    ImageComponent TOL_trial_image
      image [set every repeat] = $image_stim
      size = (0.85, 0.85)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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  Routine stim_loop_code
Flow
  Routine initial_exp_code
  Routine instructions
  LoopInitiator TOL_loop loopType="TrialHandler"
    conditionsFile = $TOL_task_order
    loopType = sequential
    nReps = 1
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    Routine TOL_loop_code
    Routine trial_instructions
    LoopInitiator stim_loop loopType="TrialHandler"
      conditionsFile = $this_loop_conditions
      loopType = sequential
      nReps = 1
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      Routine stim
    LoopTerminator stim_loop
  LoopTerminator TOL_loop
