PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = vSAT
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Routines
  Routine inter_stim_code
    CodeComponent code
      Code Type = Auto->JS
  Routine delay
    TextComponent delay_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine signal_event
    PolygonComponent vSAT_square
      fillColor = white
      opacity [set every repeat] = int(match)
      pos [set every repeat] = $[x_pos, y_pos]
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stim_time
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  Routine response_cue
    SoundComponent response_cue_sound
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.43
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  Routine signal_response
    PolygonComponent stimuli_background
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = 0.0000, 0.0000, 0.0000
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent stim_resp
      allowedKeys = 'left','right'
      correctAns = $corr_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    CodeComponent stim_code
      Code Type = Py
      Begin Routine:
        thisExp.addData("stim_begin_datetime", datetime.now().strftime("%Y-%m-%d_%H:%M:%S.%f"))
  Routine feedback
    SoundComponent feedback_sound
      sound = B
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      volume [set every repeat] = correct_resp
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  Routine inter_stimulus_time
    TextComponent inter_stim_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $inter_stim_time
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  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Before Experiment:
        from datetime import datetime
        import time
        start_time = datetime.now()
        start_timestamp = int(datetime.timestamp(start_time) * 1e9)
        start_time = start_time.strftime("%Y-%m-%d-%H-%M-%S-%f")

        # setup markers -----
        import os
        cwd = os.getcwd()
        kernel_socket_path = os.path.join(os.path.dirname(cwd), "main", "kernel_socket")
        import sys
        sys.path.insert(0, kernel_socket_path)
        from kernel_socket import Marker
        marker = Marker()
      Begin Experiment:
        # setup dirs and files -----
        tasks_dir = os.path.dirname(_thisDir)
        task_dir = os.path.join(tasks_dir, expName)
        par_task_dir = os.path.join(tasks_dir, "participants", f"participant_{expInfo['participant']}", f"{str(expName)}")
        data_dir = os.path.join(par_task_dir, "data")
        print("DATA DIR ", data_dir)

        try:
            os.mkdir(data_dir)
        except:
            pass

        filename = os.path.join(data_dir, f"{str(expInfo['participant'])}_{str(expInfo['session'])}_{str(expName)}_{start_time}")
        thisExp.dataFileName = filename
        logFile = logging.LogFile(filename + '.log', level=logging.EXP)

        # task order -----
        for filename in os.listdir(par_task_dir):
            if "vSAT_TO-" in filename:
                task_order_csv = os.path.join(par_task_dir, filename)

        # task conditions -----
        cond_dir = os.path.join(par_task_dir, f"{str(expName)}_conditions")
        conds_list = os.listdir(cond_dir)

        # start experiment marker -----
        marker.send_marker(91, start_timestamp)
      End Experiment:
        # end experiment marker -----
        end_time = datetime.now()
        end_timestamp = int(datetime.timestamp(start_time) * 1e9)
        marker.send_marker(92, end_timestamp)
  Routine signal_response_code
    CodeComponent response_code
      Code Type = Py
      Begin Routine:
        if match == 1 and stim_resp.keys == "right":   # if stim and right
            correct_resp = 1
        elif match == 0 and stim_resp.keys == "left":  # if no stim and left
            correct_resp = 1
        else:                                          # if incorrect response
            correct_resp = 0
  Routine main_loop_code
    CodeComponent outer_loop_code
      Code Type = Py
      Begin Routine:
        for cond in conds_list:
            if cond == task_order:
                this_loop_conditions = os.path.join(cond_dir, cond)

        # instructions text display -----
        if "vSAT_stims" in task_order:
            text_display = [1, 0]
        else:  # SAT
            text_display = [0, 1]
  Routine vSAT_loop_code
  Routine initial_instructions
    TextComponent instructions_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is the Visuospatial Sustained Attention Task.

        Press RIGHT if the signal is present.

        Press LEFT if the signal is not present.

        Press SPACE to continue.
    KeyboardComponent instructions_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine experiment_instructions
    TextComponent experiment_SAT_text
      letterHeight = 0.1
      opacity [set every repeat] = text_display[1]
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is a SAT trial.

        Press SPACE to continue.
    TextComponent experiment_vSAT_text
      letterHeight = 0.1
      opacity [set every repeat] = text_display[0]
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        This is a vSAT trial.

        Press SPACE to continue.
    KeyboardComponent experiment_instructions_rep
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine experiment_start
  Routine experiment_end_code
    CodeComponent end_code
      Code Type = Py
Flow
  Routine initial_exp_code
  Routine initial_instructions
  LoopInitiator main_loop loopType="TrialHandler"
    conditionsFile = $task_order_csv
    loopType = sequential
    nReps = 1
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    Routine main_loop_code
    Routine experiment_instructions
    LoopInitiator vSAT_loop loopType="TrialHandler"
      conditionsFile = $this_loop_conditions
      loopType = sequential
      nReps = 1
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      Routine inter_stimulus_time
      Routine signal_event
      Routine delay
      Routine response_cue
      Routine signal_response
      Routine signal_response_code
      Routine feedback
    LoopTerminator vSAT_loop
  LoopTerminator main_loop
