PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = video_narrative
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Routines
  Routine catchme_video
    MovieComponent catchme_clip
      backend = moviepy
      forceEndRoutine = False
      movie = video_clips\CMIYC_clip.mov
      startVal [time (s)] = 0.0
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  Routine sherlock_video
    MovieComponent sherlock_clip
      backend = moviepy
      forceEndRoutine = False
      movie = video_clips\sherlock_part1_clip.mov
      startVal [time (s)] = 0.0
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  Routine initial_exp_code
    CodeComponent initial_code
      Code Type = Py
      Begin Experiment:
        import os
        # path to kernel socket module
        cwd = os.getcwd()
        os.chdir("..")
        kernel_socket_path = os.path.join(os.getcwd(), "main", "kernel_socket")
        os.chdir(cwd)
        import sys
        sys.path.insert(0, kernel_socket_path)
        from kernel_socket import Marker
        marker = Marker()

        marker.send_marker(81)
      End Experiment:
        marker.send_marker(82)
  Routine experiment_end_code
    CodeComponent end_code
      Code Type = Py
  Routine catchme_instructions
    TextComponent catchme_instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the "Catch Me If You Can" video clip.

        Please pay attention to the story.

        Press SPACE when you are ready to watch the clip.
    KeyboardComponent catchme_instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine catchme_details
    TextComponent catchme_details_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please recall details from the "Catch Me If You Can" clip. You will have 3 minutes to type your response.

        Press SPACE when you are ready to continue.
    KeyboardComponent catchme_details_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sherlock_instructions
    TextComponent sherlock_instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the "Sherlock" video clip.

        Please pay attention to the story.

        Press SPACE when you are ready to watch the clip.
    KeyboardComponent sherlock_instructions_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sherlock_details
    TextComponent sherlock_details_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please recall details from the "Sherlock" clip. You will have 3 minutes to type your response.

        Press SPACE when you are ready to continue.
    KeyboardComponent sherlock_details_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine catchme_text_respone
    TextboxComponent catchme_participant_response
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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    CodeComponent catchme_response_code
      Code Type = Py
  Routine sherlock_text_response
    TextboxComponent sherlock_participant_response
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 180
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    CodeComponent sherlock_response_code
      Code Type = Py
Flow
  Routine initial_exp_code
  Routine catchme_instructions
  Routine catchme_video
  Routine catchme_details
  Routine catchme_text_respone
  Routine sherlock_instructions
  Routine sherlock_video
  Routine sherlock_details
  Routine sherlock_text_response
  Routine experiment_end_code
